''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Long-term canister-based trace gas flux measurement system
' using the Relaxed Eddy Accumulation (REA) technique
'
' Laboratory for Atmospheric Research
' Department of Civil & Environmental Engineering
' Washington State University
'
' Licensed under the terms of The MIT License
'
' Contact:  Patrick O'Keeffe <pokeeffe@wsu.edu>
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

'manually update this constant with results of `git describe` prior to
'deployment but do not check-in file with any value other than empty string
Const VERSION = ""

'========================= DEFAULT SETTINGS =================================
ConstTable
  Const UTC_OFFSET = -8 'Pacific Standard Time
EndConstTable

'============================== WIRING ======================================
Const GPS_COM = Com3 'C5/C6

Const SONIC_COM = Com4 'C7/C8


'============================ CONSTANTS =====================================
Const FAST_INTV = 100 'milliseconds, scan freq.
Const FAST_BUFF = 10 
Const STATS_INTV = 30 'minutes
Const STOPFULL = 1 'stop recording when tables are full

Const SONIC_RECLEN = 34 'characters per record
Const SONIC_BAUD = 38400
Const SONIC_FORMAT = 3 '8/N/1 @ RS-232 voltages without PakBus pass-thru
Const SONIC_BUFF = SONIC_RECLEN*2 + 1
Const SONIC_VAZ = 0 'device-specific value, offset of device azimuth

Const GPS_INTV = 15 'seconds, scan freq.
Const GPS_MAX_DIFF = 25 'msec, clock tolerance
Const GPS_MED_NUM = 86400/GPS_INTV 'max # of values included in median calc


'============================= VARIABLES ====================================
Dim sonic_bytes
Dim sonic_record As String * SONIC_RECLEN
Public sonic(5)
Alias sonic(1) = sonic_Ux
Alias sonic(2) = sonic_Uy
Alias sonic(3) = sonic_Uz
Alias sonic(4) = sonic_Ts
Alias sonic(5) = sonic_diag
Units sonic = m/s
Units sonic_Ts = degC
Units sonic_diag = arb

Public disable_sonic As Boolean
Public sonic_azimuth = {0}

Dim nmea_str(2) As String * 90
Public gps16x(15)
Alias gps16x(1)  = lat_deg        '(+)=North, (-)=South
Alias gps16x(2)  = lat_min
Alias gps16x(3)  = long_deg       '(+)=East, (-)=West
Alias gps16x(4)  = long_min
Alias gps16x(5)  = speed
Alias gps16x(6)  = course
Alias gps16x(7)  = mag_var        '(+)=East, (-)=West
Alias gps16x(8)  = fix_quality
Alias gps16x(9)  = num_sat
Alias gps16x(10) = altitude
Alias gps16x(11) = since_pps
Alias gps16x(12) = since_gprmc
Alias gps16x(13) = gps_ready
Alias gps16x(14) = max_clock_change
Alias gps16x(15) = num_clock_change
Units speed = m/s
Units course = degEofN
Units mag_var = degEofN
Units fix_quality = unitless
Units num_sat = count
Units altitude = m
Units since_pps = ms
Units since_gprmc = s
Units max_clock_change = ms
Units num_clock_change = occurrences

Public work_out(4)
Alias work_out(1) = sonic_WS_sclr_Avg
Alias work_out(2) = sonic_WS_rslt_Avg
Alias work_out(3) = sonic_WD_rslt_Avg
Alias work_out(4) = sonic_WD_csi_Std
Units sonic_WS_sclr_Avg = m/s
Units sonic_WS_rslt_Avg = m/s
Units sonic_WD_rslt_Avg = degEofTN
Units sonic_WD_csi_Std = degrees

'============================ DATA TABLES ===================================
DataTable(ts_fast,True,1000) 'FIXME - # records
  DataInterval(0,FAST_INTV,msec,10)
  CardOut(STOPFULL,10*60*60*4) '4 hours, FIXME
  
  Sample(1,sonic_Ux,IEEE4) 'TODO - FP2? only reported to two decimal places
  Sample(1,sonic_Uy,IEEE4)
  Sample(1,sonic_Uz,IEEE4)
  Sample(1,sonic_Ts,IEEE4)
  Sample(1,sonic_diag,IEEE4)
EndTable

DataTable(work,True,2)
  DataInterval(0,STATS_INTV,Min,1)
  WindVector(1,-1*sonic_Uy,sonic_Ux,IEEE4,disable_sonic,0,1,2)
EndTable

DataTable(stats,True,1000) 'FIXME - # records
  DataInterval(0,STATS_INTV,Min,10)
  CardOut(STOPFULL,1000) 'FIXME - # records

  Average(1,sonic_Ts,FP2,disable_sonic or sonic_Ts=NAN)
  StdDev (1,sonic_Ts,FP2,disable_sonic)
  StdDev (1,sonic_Uz,FP2,disable_sonic)
  Sample (1,sonic_WS_sclr_Avg,FP2)
  Sample (1,sonic_WS_rslt_Avg,FP2)
  Sample (1,sonic_WD_rslt_Avg,FP2)
  Sample (1,sonic_WD_csi_Std,FP2)
EndTable

DataTable(gps_daily,TRUE,30)
  DataInterval (0,1,Day,10)
  CardOut(STOPFULL,150)
  Median(1,(lat_deg + lat_min/60),GPS_MED_NUM,IEEE4,(lat_deg=NAN OR lat_min=NAN))
    FieldNames("latitude_Med")
    Units latitude_Med = degN
  Median(1,(long_deg + long_min/60),GPS_MED_NUM,IEEE4,(long_deg=NAN OR long_min=NAN))
    FieldNames("longitude_Med")
    Units longitude_Med = degE
  Median(1,mag_var,GPS_MED_NUM,FP2,mag_var=NAN)
  Average(1,num_sat,FP2,num_sat=NAN)
  Median(1,altitude,GPS_MED_NUM,IEEE4,altitude=NAN)
  Average(1,altitude,FP2,altitude=NAN)
  Minimum(1,gps_ready,FP2,gps_ready=NAN,0)
  Sample(1,max_clock_change,UINT2)
  Sample(1,num_clock_change,UINT2)
EndTable


'============================= CUSTOM MENUS =================================
Const Yes = True
Const Cancel = False
Dim recompile As Boolean

DisplayMenu("LT REA DAQ", -1)
  SubMenu("Initial setup")
    MenuItem("Time zone", UTC_OFFSET)
      MenuPick(UTC_OFFSET,-8,-7,-6,-5,-4) 'FIXME: not valid outside USA
    MenuRecompile("Recompile?", recompile)
      MenuPick(Cancel,Yes)
  EndSubMenu
EndMenu


'============================= SUBROUTINES ==================================
Sub setup()
  SerialOpen(SONIC_COM,SONIC_BAUD,SONIC_FORMAT,0,SONIC_BUFF)
EndSub


'============================== PROGRAM =====================================
BeginProg
  setup()
  
  Scan(FAST_INTV,msec,FAST_BUFF,0)
    SerialInRecord(SONIC_COM,sonic_record,0,SONIC_RECLEN,&h0D,sonic_bytes,11)
    SplitStr(sonic(1),sonic_record,0,5,0)
    disable_sonic = (sonic_diag > 0 OR sonic_diag=NAN OR sonic_Ts=NAN OR _
                                sonic_Ux=NAN OR sonic_Uy=NAN or sonic_Uz=NAN)
    
    CallTable(ts_fast)
    CallTable(work)
    If (work.Output(1,1)) Then
      GetRecord(work_out(1),work,1)
      If (sonic_WS_sclr_Avg = NAN AND sonic_WS_rslt_Avg = NAN) Then
        sonic_WD_rslt_Avg = NAN
        sonic_WD_csi_Std = NAN
      Else
        sonic_WD_rslt_Avg = (Round(sonic_WD_rslt_Avg,0)+sonic_azimuth) MOD 360
      EndIf
    EndIf
    CallTable(stats)
  NextScan

  SlowSequence
  Scan(GPS_INTV,sec,1,0)
    GPS(gps16x(1),GPS_COM,UTC_OFFSET*3600,GPS_MAX_DIFF,nmea_str(1))
    CallTable(gps_daily)
  NextScan
EndProg

